// Open image sequence in current directory from shell

cwd = call("java.lang.System.getProperty", "user.dir");
cur = getDirectory("current")
print("");
print("cwd:" + cwd );
print("cur:" + cur );
dir = cwd;

t = lengthOf(dir) == 0;
print("t:" + t);

if (t)  {
   dir = cwd;
}
print("dir:" + dir );

args = "open=[" + dir + "] file=tif sort";

// Auto contrast stack
//run("Appearance...", "auto ij menu=0 gui=1 16-bit=Automatic");
run("Appearance...", "open no auto ij menu=0 gui=1.25 16-bit=Automatic");
run("Misc...", "divide=Infinity run save");

// Open image stack
run("Image Sequence...", args);

